PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'archive/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'eeg_record': "['yes', 'no']", 'experimenter': '', 'show_control_monitor': "['yes', 'no']"}
  Full-screen window = True
  Monitor = RoseStim
  Screen = 1
  Units = degFlat
  Window size (pixels) = [1440, 900]
  color = $[0.0,0.0,0.0]
  expName = emo_gonogo
  logging level = debug
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Routines
  Routine trial
    CodeComponent trial_timing_params
      Code Type = Py
      Begin Routine:
        # Get the image
        if this_phase == 'prac':
            img_dir = 'prac_images'
        else:
            img_dir = 'images'
        this_image = os.path.join(img_dir, image_file)

        # Randomly select a trial jitter
        shuffle(jitters_list)
        this_jitter = round(jitters_list[0])

        # Add to the trialHandler object
        trials.addData(u'jitter', this_jitter)
    CodeComponent send_eeg_trigger
      Code Type = Py
      Begin Routine:
        # Reset the trigger
        if eeg_record:
            eeg_trig_box.write(reset_bit)

        # At start of the trial, indicate I have not snt a trigger
        stim_trigger_sent = False
        stim_trigger_frame = 0

        # Determine trigger value
        this_marker_code = stim_marker[trial_type][category]
      Each Frame:
        # Send trigger if needed
        if eeg_record:
            if stim_image.status == STARTED:
                if not stim_trigger_sent and this_phase == 'crit':
                    win.callOnFlip(eeg_trig_box.write, this_marker_code)
                    stim_trigger_sent = True
                    stim_trigger_frame = frameN
                    trials.addData(u'stim_trigger_frame', stim_trigger_frame)

            # Reset the trigger at the next flip
            if stim_trigger_sent and frameN == stim_trigger_frame + 5: # Do this 5 frames later
                win.callOnFlip(eeg_trig_box.write, reset_bit)
    ImageComponent stim_image
      durationEstim = .5
      image [set during: trial.trial_ISI] = $this_image
      size = (12.0, 9.0)
      startEstim = .5
      startVal [frame N] = trial_start_isi_duration
      stopVal [duration (frames)] = image_duration
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    PolygonComponent photosensor_dot
      durationEstim = .5
      fillColor = $[1,1,1]
      nVertices = 180
      pos = (-24.0, 0.0)
      shape = regular polygon...
      size = (0.75,0.75)
      startEstim = .5
      startVal [frame N] = $trial_start_isi_duration
      stopVal [duration (frames)] = $image_duration
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    TextComponent trial_red_fixation
      durationEstim = 1.25
      letterHeight = 0.1
      startEstim = 1
      startVal [frame N] = $trial_start_isi_duration + image_duration
      stopVal [duration (frames)] = $this_jitter
      text = +
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    KeyboardComponent response
      allowedKeys = 'f', 'j'
      durationEstim = 1.75
      forceEndRoutine = False
      startEstim = .5
      startVal [frame N] = $trial_start_isi_duration 
      stopVal [duration (frames)] = $trial_dur_frames + imge_duration + this_jitter
      store = first key
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    CodeComponent send_resp_trigger_and_code
      Code Type = Py
      Begin Routine:
        # State I have not sent a response trigger yet, and initialize response.keys
        resp_trigger_sent = False
        resp_marker = []
        resp_marker_frame = 0

        # Response markers are outlined in the config routine.
      Each Frame:
        # Send response trigger
        if eeg_record:
            if len(response.keys) == 1:

                # Code the response
                this_key = response.keys
                this_rt  = response.rt
                if trial_type == 'go':
                    is_resp_cor = 1
                    resp_type = 'correct'
                else:
                    is_resp_cor = 0
                    resp_type = 'incorrect'

                # Send the marker
                if not resp_trigger_sent and this_phase == 'crit':
                    # Make call to send trigger
                    win.callOnFlip(eeg_trig_box.write, resp_marker[resp_type])
                    resp_trigger_sent = True
                    resp_marker_frame = frameN
                    trials.addData(u'resp_trigger_frame', resp_marker_frame)

            # Reset the trigger at the next flip
            if resp_trigger_sent and frameN == resp_marker_frame + 5:
                win.callOnFlip(eeg_trig_box.write, reset_bit)
      End Routine:
        # Log and store data
        if response.keys in ['', [], None]: # Update things I need to
            this_key = 'n/a'
            this_rt = -99
            if trial_type == 'nogo':
                is_resp_cor = 1

        # Add data to trialHandler
        trials.addData(u'resp',this_key)
        trials.addData(u'rt',this_rt)
        trials.addData(u'correct',is_resp_cor)
    StaticComponent trial_ISI
      durationEstim = .5
      startVal [frame N] = 0
      stopVal [duration (frames)] = $trial_start_isi_duration 
      syncScreenRefresh = True
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  Routine delay
    CodeComponent delay_control_monitor
      Code Type = Py
      Begin Routine:
        # Determine if delay is needed
        if draw_delay:
            continueRoutine = True
        else:
            continueRoutine = False

        if eeg_record and show_control:
            control_text.setText('Task')
            control_text.draw()
            win2.flip()
    TextComponent delay_red_fix
      color = $[1.000,-1.000,-1.000]
      durationEstim = 20
      letterHeight = 1.0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $delay_duration
      text = +
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  Routine instructions
    CodeComponent instructions_control_monitor
      Code Type = Py
      Begin Routine:
        # Determine the current phase based on current file
        if phase.thisRepN == 0:
            win.recordFrameIntervals = False
            this_phase = 'prac'
            this_stim_file = prac_file
        else:
            win.recordFrameIntervals = True
            this_phase = 'crit'
            this_stim_file = crit_file

        # Display on control monitor if needed
        if show_control:
            control_text.setText('Instructions')
            control_text.draw()
            win2.flip()
    TextComponent instructions_text
      letterHeight = 1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_block - this_phase
      wrapWidth = 220
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    ImageComponent instruction_image
      disabled = True
      image = $instruction_image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine save_trials
    CodeComponent print_frame_drops
      Code Type = Py
      Begin Routine:
        print('Overall, %i frames were dropped.' % win.nDroppedFrames)
        win.recordFrameIntervals = False
    CodeComponent save_trial_handler
      Code Type = Py
      Begin Routine:
        # Make the save file name (This should have accurate id as it is reading from it)
        save_file_name = f"sub-{expInfo['id']}_task-{this_block}_run-{this_phase}_beh"
        save_pickle = save_dir /  save_file_name
        save_tsv = save_dir / save_file_name + '.tsv'
        save_csv = save_dir / save_file_name + '.csv'

        # Save it many different ways
        trials.saveAsWideText(save_tsv)
        trials.saveAsWideText(save_csv)
        trials.saveAsPickle(save_pickle)
    TextComponent final_red_fix
      color = $[1.000,-1.000,-1.000]
      durationEstim = 20
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (s)] = $delay_duration
      text = +
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  Routine task_complete
    CodeComponent task_complete_control_monitor
      Code Type = Py
      Begin Routine:
        if eeg_record and show_control:
            control_text.setText('TASK COMPLETE')
            control_text.draw()
            win2.flip()
    CodeComponent save_experiment_handler
      Code Type = Py
      Begin Routine:
        # Resave experiment handler just in case
        # This is copied from code generated by PsychoPy Builder
        thisExp.saveAsPickle(filename)
        thisExp.saveAsWideText(filename + '.csv')
        thisExp.saveAsWideText(filename + '.tsv')
    TextComponent task_complete_text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This task is now complete.
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  Routine task_break
    CodeComponent task_break_code
      Code Type = Py
      Begin Experiment:
        # Define number of trials between rests
        task_break_n = 115
      Begin Routine:
        # Define the break display text
        break_string = 'Take a break'

        # Determine if a break is needed
        if trials.thisN == 0:
            continueRoutine = False
            draw_delay = True
        elif trials.thisN % task_break_n != 0:
            continueRoutine = False
            draw_delay = False
        else:
            continueRoutine = True
            draw_delay = True

        # Show control monitor if needed
        if eeg_record and continueRoutine and show_control:
            control_text.setText('Break')
            control_text.draw()
            win2.flip()
      Each Frame:
        if break_resp.status == STARTED:
            break_string = 'Take a break /n/n Let the experimenter know when you are ready'
    TextComponent break_text
      letterHeight = 1
      startVal [time (s)] = 0
      text [set every repeat] = $break_string
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    KeyboardComponent break_resp
      allowedKeys = [' ','space']
      forceEndRoutine = True
      startVal [time (s)] = 30
      store = nothing
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  Routine config
    CodeComponent configure_options
      Code Type = Py
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      Begin Experiment:
        ## Import some useful libraries
        from pathlib import Path
        from random import shuffle
        import pandas as pd

        ## TASK PARAMETERS
        # Proportion of go trials
        go_proportion = .8

        ## TIMING OPTIONS
        # Timing Variables (all are in seconds)
        # These are converted to frames in the Begin Routine tab (changed in place)
        image_duration = .5 # Length the word is on the screen
        trial_start_isi_duration = .250 # Static ISI time. Subtracted from min_jitter and max_jitter to make the list
        delay_duration = 20.0 # Time padding beginning and end of a trial segment.
        jitter_spacing = frameDur # Intervals between jitter possibilities, same as frameDur
        min_jitter = 1.5 # Minimum jitter duration
        max_jitter = 2.5 # Maximum jitter duration

        ## EEG SETUP TRIGGER OPTIONS
        eeg_com = 'COM5' # Can check the Device Manager in windows to figure this out (COM Ports).
        reset_bit = [0] # Don't change this unless you know what you are doing

        # Stimulus markers
        # The codes sent for trial has two digits.
        # First digit codes fortrial type (1=go, 2=nogo)
        # Second digit is emotion category (1=neutral, 2=negative, 3=positive)
        # The Markers are in a dictionary
        stim_marker = {
            'go': dict(neutral=[11], negative=[12]),
            'nogo': dict(neutral=[21], negative=[22])
        }

        # Response markers
        # This is the code for whether a response is given.
        # The codes are 56 for correct go response and
        # 57 for incorrecr response to a nogo trial
        resp_marker = {
            'correct': [56],
            'incorrect': [57]
        }
      Begin Routine:
        # Note that frameDur is the duration of a single frame estimated
        # by psychopy. If it fails to detect in (e.g., frameRate == Null),
        # this typically defaults to 60.0 Hz. Note that this timing scheme
        # allows for reproducibility across systems (monitors, computers, etc.)

        # THE FOLLOWING SHOULD NOT BE CHANGED (minus variable names)

        # Critical timing pieces
        iamge_duration = round(image_duration / frameDur)
        trial_start_isi_duration = round(trial_start_isi_duration / frameDur)
        delay_duration = round(delay_duration / frameDur)

        # Make jitters list
        jitters = np.arange(min_jitter-trial_start_isi_duration, max_jitter + frameDur - trial_start_isi_duration, frameDur) / frameDur
  Routine setup
    CodeComponent frame_rate_optimization
      Code Type = Py
      Begin Experiment:
        ## FRAM RATE OPTIMIZATION OPTIONS
        processPriority = 'realtime' # Can be 'normal', 'high', 'realtime'
        disableGC = True # disable garbage collection

        # Import garbage collection module
        import gc

        # Handle Priority stuff
        if processPriority == 'normal':
            pass
        elif processPriority == 'high':
            core.rush(True)
        elif processPriority == 'realtime':
            # Only makes a diff compared to 'high' on Windows.
            core.rush(True, realtime=True)
        else:
            raise Exception('Invalid process priority:', processPriority, "Process running at normal.")

        # Handle Garbage Collection
        if disableGC:
            gc.disable()
    CodeComponent info_gui_code
      Code Type = Py
      Begin Experiment:
        # Define eeg_record
        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['eeg_record'] == 'yes':
            eeg_record = True
        else:
            eeg_record = False

        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['show_control_monitor'] == 'yes':
            show_control = True
        else:
            show_control = False

        # Check if frameRate can be determined, if not, exit out
        frameRate = expInfo['frameRate']
        if frameRate == None:
            print('frame rate not established. Try Again.')
            win.close()
            core.quit()

        # Verify everything
        if show_control:
            dlg = gui.DlgFromDict(dictionary=expInfo, title='Is this information correct?')
            if dlg.OK == False:
                win.close()
                core.quit()  # user pressed cancel
    CodeComponent control_monitor_code
      Code Type = Py
      Begin Experiment:
        # Record frame intervals
        win.recordFrameIntervals = False

        # Setup window 2 only if asked too
        if show_control:

            win2 = visual.Window(
                size=[1920,1080], fullscr=True, screen=1,
                allowGUI=False, allowStencil=False,
                color=[-1.0,-1.0,-1.0], colorSpace='rgb',
                blendMode='avg', useFBO=True,
                units='degFlat')

            control_text = visual.TextStim(win=win2,
                text='default text',
                font='Helvetica',
                pos=(0, 0), height=1.5, wrapWidth=200, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                depth=-1.0);
      End Experiment:
        # Close the control room monitor
        if show_control:
            win2.close()
    CodeComponent data_save_setup
      Code Type = Py
      Begin Experiment:
        # Setup save directorya
        save_dir = Path('data') / f"sub-{expInfo['id']}"
        save_dir.mkdir(exist_ok=True, parents=True)
    CodeComponent eeg_trigger_setup
      Code Type = Py
      Begin Experiment:
        if eeg_record:

            # Import library
            import serial

            # Setup box
            eeg_trig_box = serial.Serial(eeg_com)
            eeg_trig_box.write(reset_bit)
      End Experiment:
        # Return bits to low state, then close connection
        if eeg_record:
            eeg_trig_box.write(reset_bit)
            eeg_trig_box.close()
    CodeComponent make_stim_list
      Code Type = Py
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      Begin Routine:
        # Handle directories
        image_dir = Path('images')
        stim_dir = Path('stim_lists')
        stim_dir = stim_dir / expInfo['id']
        stim_dir.mkdir(exist_ok=True, parents=True)

        # Handle the file names
        negative_file = stim_dir / f'sub-{id}_neg-go_neut-nogo_crit.csv'
        neutral_file = stim_dir / f'sub-{id}_neg-nogo_neut-go_crit.csv'

        # Only make stimuli if the files don't exist.
        if not negative_file.is_file() and not neutral_file.is_file():

            # Read in stimuli data
            imgs = pd.read_csv('iaps_stimuli.csv')
            neg = imgs[imgs['category'] == 'negative']
            neut = imgs[imgs['category'] == 'neutral']

            # Randomly split negative images into frac=80/20
            neg_go = neg.sample(frac=go_proportion)
            neg_go['condition'] = 'go'
            neg_nogo = neg.drop(neg_go.index)
            neg_nogo['condition'] = 'nogo'

            # Randomly split neutral images into frac=80/20
            neut_go = neut.sample(frac=go_proportion)
            neut_go['condition'] = 'go'
            neut_nogo = neut.drop(neut_go.index)
            neut_nogo['condition'] = 'nogo'

            # Make the blocks and save them
            negative_go = pd.concat([neg_go, neut_nogo], ignore_index=True)
            negative_go.to_csv(negative_file, index=False)
            neutral_go = pd.concat([neut_go, neg_nogo], ignore_index=True)
            neutral_go.to_csv(neutral_file, index=False)

        # Randomize block order
        block_order = ['negative', 'neutral']
        shuffle(block_order)
  Routine select_list
    CodeComponent select_stim_list
      Code Type = Py
      Begin Routine:
        # Get the list element from block_order (see setup->make_stim_lists)
        this_block = block_order[nogo_blocks.thisRepN]

        # Define csv files
        if this_block == 'negative':
            prac_file =  'neg-go_neut-nogo_prac.csv'
            crit_file = negative_file
            instruction_image_file = 'neg-go_neut-nogo_instructions.jpg'
        else:
            prac_file = 'neg-nogo_neut-go_prac.csv'
            crit_file = neutral_file
            instruction_image_file = 'neg-nogo_neut-go_instructions.jpg'
Flow
  Routine config
  Routine setup
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine select_list
    LoopInitiator phase loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine instructions
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $this_sim_file
        loopType = random
        nReps = 1
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        Routine task_break
        Routine delay
        Routine trial
      LoopTerminator trials
      Routine save_trials
    LoopTerminator phase
  LoopTerminator blocks
  Routine task_complete
